PsychoPy2experiment version="3.3.0"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = mcc_random_word_list
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Routines
  Routine intro
    TextComponent welcome
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Welcome to the experiment!

        Read through the Study Information sheet on the following page and press SPACEBAR to continue if you agree to participate.

        If the edges of your screen are cutting off any of the text, press ESC once to leave full screen mode.

        If you want to leave this study at any time, press ESC twice to leave full screen and be redirected to the SONA site.

        Press SPACEBAR to view the Study Information sheet.
    KeyboardComponent welc_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent set_up
      Code Type = Auto->JS
      Begin Experiment:
        # CREATE 3 LOG FILES

        # set up free recall log
        # frName = _thisDir + os.sep + 'data' + os.sep + '%s_%s_%s_%s.txt' %('freerecall', expInfo['participant'], expName, expInfo['date'])
        # give columns names
        # frOutput = []
        # frOutput.append('ListNum')
        # frOutput.append('TrialNum')
        # frOutput.append('Output')
        # frOutput.append('RT')
        # write the columns to the data file
        # frData=open(frName, 'a')
        # for item in frOutput:
        #     frData.write('%s\t' % item)
        # frData.write('/n')
        # frData.close()

        # set up animal log
        # animName = _thisDir + os.sep + 'data' + os.sep + '%s_%s_%s_%s.txt' %('animal', expInfo['participant'], expName, expInfo['date'])
        # give columns names
        # animOutput = []
        # animOutput.append('TrialNum')
        # animOutput.append('Output')
        # animOutput.append('RT')
        # write the columns to the data file
        # animData=open(animName, 'a')
        # for item in animOutput:
        #     animData.write('%s\t' % item)
        # animData.write('/n')
        # animData.close()

        # set up recognition log
        # recogName = _thisDir + os.sep + 'data' + os.sep + '%s_%s_%s_%s.txt' %('recogntion', expInfo['participant'], expName, expInfo['date'])
        # give columns names
        # recogOutput = []
        # recogOutput.append('TrialNum')
        # recogOutput.append('TestWord')
        # recogOutput.append('TarFoil')
        # recogOutput.append('Output')
        # recogOutput.append('RT')
        # write the columns to the data file
        # recogData=open(recogName, 'a')
        # for item in recogOutput:
        #     recogData.write('%s\t' % item)
        # recogData.write('/n')
        # recogData.close()
  Routine study
    TextComponent study_list
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $studyword
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  Routine studyInfo
    TextComponent consent
      letterHeight = 0.023
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        Modeling memory for randomized lists
        Lead Researcher: Holly Westfall, Graduate Student, Cognitive Sciences, (352) 348-6916, hwestfal@uci.edu
        Faculty Sponsor: Michael Lee, Faculty, Cognitive Sciences, (949) 689-0864, mdlee@uci.edu

        Please read the information below and ask questions about anything that you do not understand. A researcher listed above will be available to answer your questions.

        You are being asked to participate in a research study. Participation in this study is voluntary. You may choose to skip a question or a study procedure. You may refuse to participate or discontinue your involvement at any time without penalty or loss of benefits. You are free to withdraw from this study at any time. If you decide to withdraw from this study you should notify the research team immediately. We would like for you to complete a survey to learn more about memory for lists of words. The experiment will last 30 minutes or less. This study involves several tasks: The first task will be to memorize a list of words and then recall those words by typing them into a response box on your computer screen. You will see the list multiple times, with the words randomly shuffled each time. Each time you are presented with a list, you will be asked to recall the items from that list. The next task will be for you to name as many animals as you can think of, in any order, within a specified time limit. Your final task is a recognition task, where you will determine whether individual words were included in the study list at the beginning of the survey.

        Possible risks/discomforts associated with the study are fatigue or boredom during the tasks. There are no direct benefits from participation in the study. However, this study may help to develop new memory models and methods for measuring memory performance in different populations of individuals.

        All research data collected will be stored securely and confidentially. No audio tapes, video tapes, or pictures will be recorded or stored. All memory and response time data will be stored on secure servers hosted by pavlovia.org and the Lead Researcher’s password protected computer. Researchers will use your information to conduct this study. Once the study is done using your information, we may share them with other researchers so they can use them for other studies in the future. We will not share your name or any other private identifiable information that would let the researchers know who you are. We will not ask you for additional permission to share this de-identified information.

        You will receive extra course credit for an eligible course through the UCI Social Sciences human subjects’ pool. You will receive a 1⁄2 unit of course credit for each 1⁄2 hour of participation in this study. Total amount of credit you may earn for this study is 1⁄2 credit. The course instructor offering extra course credit for participation in research must provide alternatives to earn extra course credit. The alternative assignment must require equal or less time and effort for the amount of extra credit that can be earned through participation in research.

        Questions? If you have any comments, concerns, or questions regarding this study please contact the researchers listed at the top of this form. If you have questions or concerns about your rights as a research participant, you can contact the UCI Institutional Review Board by phone, (949) 824-6662, by e-mail at IRB@research.uci.edu or at 141 Innovation, Suite 250, Irvine, CA 92697. What is an IRB? An Institutional Review Board (IRB) is a committee made up of scientists and non-scientists. The IRB’s role is to protect the rights and welfare of human subjects involved in research. The IRB also assures that the research complies with applicable regulations, laws, and institutional policies.

        If you want to participate in this study, press SPACEBAR to continue with the study.
    KeyboardComponent cons_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine beginList
    TextComponent begin_study
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Get ready for the study phase!
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  Routine beginTest
    TextComponent begin_test
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        The study phase is over!

        Get ready for the memory test! You will type in all of the words you can remember from the list you just saw, in any order.
  Routine animalFluency
    TextComponent test_instr_2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = Type as many animal names as you can, pressing ENTER after each animal.
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    TextComponent text_2
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    CodeComponent output_2
      Code Type = Auto->JS
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      Begin Routine:
        text_2.text = ''
        text_2.towrite = ''
        RT = core.Clock()
        RTtowrite = ''
        event.clearEvents('keyboard')
      Each Frame:
        # draw a rectangle as a text box
        rect = visual.Rect(win, width=0.8, height=0.08, lineColor='white', pos=(0,0))
        rect.draw()

        # until return pressed, listen for letter keys & add to text string
        keys = event.getKeys(keyList=['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return','space'])

        if len(keys):
            if 'backspace' in keys:
                text_2.text = text_2.text[:-1]
            elif 'space' in keys:
                text_2.text = text_2.text + ' '
            elif 'return' in keys:
                if text_2.text == 'DONE':
                    theRT = RT.getTime()
                    RTtowrite = RTtowrite + str(theRT) + '|'
                    text_2.towrite = text_2.towrite + text_2.text + '|'
                    continueRoutine = False
                else:
                    theRT = RT.getTime()
                    RTtowrite = RTtowrite + str(theRT) + '|'
                    text_2.towrite = text_2.towrite + text_2.text + '|'
                    event.clearEvents('keyboard')
                    RT = core.Clock()
                    text_2.text = ''
            else:
                # words typed in all caps
                text_2.text = text_2.text + keys[0].upper()
      End Routine:
        # add typed words and RT to the data file
        thisExp.addData('typedAnim', text_2.towrite)
        thisExp.addData('animRT', RTtowrite)
    TextComponent end_instr2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
      text = The experiment will automatically continue after 3 minutes.
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  Routine recogTest
    TextComponent recog_instr2
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Is this word "old" or "new"?
      wrapWidth = 1.5
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    TextComponent show_word
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text [set every repeat] = $testword
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    KeyboardComponent old_new
      allowedKeys = 'o','n'
      correctAns = $correctresp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
      storeCorrect = True
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  Routine beginAnimal
    TextComponent anim_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        The first task is over!

        Now we will ask you to type in as many animal names as you can think of. Type in each animal name, one at a time, pressing ENTER between each animal. You have a time limit of 3 minutes. At the end of 3 minutes, the experiment will automatically continue to the next task.

        Press SPACEBAR when you are ready to begin the animal task.
    KeyboardComponent anim_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine beginDelayedFR
    TextComponent delayedFR_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        The animal task is over! Now it is time for a surprise recall task!

        Think back to the list of 10 words you studied three times during the FIRST phase of the experiment. In the next section, we will ask you recall as many of those words as you can, just as you did before.

        Press SPACEBAR when you are ready to continue.
    KeyboardComponent delayedFR_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine beginRecog
    TextComponent recog_instr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Your final task for this experiment is a recognition memory task. In the next section, you will be shown words one at a time. Your task is to decide for each word if it was in the study phase during the FIRST phase of the experiment.

        If you think a word was presented in the study phase, press the letter "O" on your keyboard to indicate that this word is "old".

        If you think a word was NOT presented in the study phase, press the letter "N" on your keyboard to indicate that this word is "new".

        Press SPACEBAR when you are ready to begin.
    KeyboardComponent recog_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine expDone
    TextComponent its_over
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You must press ENTER for your data to save and for you to automatically receive credit on SONA.

        If you do not automatically receive credit for this study, it will be granted to you within 3 business days.

        If you have any follow-up comments or questions, please email hwestfal@uci.edu

        You are now finished with the experiment! Please press ENTER to save your data. Once your data has been saved, select "OK" to be redirected to SONA.
    KeyboardComponent over_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine endImmFR
    TextComponent end_ImmFR
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You have completed the first part of the experiment.

        Press SPACEBAR when you are ready to continue to the next section.
    KeyboardComponent ready
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine FRtest
    TextComponent test_instr1
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Type each word you can remember one at a time, pressing ENTER after each word. Words can be typed in any order.
      wrapWidth = 1.5
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    TextComponent text
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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    CodeComponent record_output1
      Code Type = Auto->JS
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      Begin Routine:
        text.text = ''
        text.towrite = ''
        RT = core.Clock()
        RTtowrite = ''
        event.clearEvents('keyboard')
      Each Frame:
        # draw a rectangle as a text box
        rect = visual.Rect(win, width=0.8, height=0.08, lineColor='white', pos=(0,0))
        rect.draw()

        # until return pressed, listen for letter keys & add to text string
        keys = event.getKeys(keyList=['a','b','c','d','e','f','g','h','i','j','k','l','m','n','o','p','q','r','s','t','u','v','w','x','y','z','backspace','return'])


        if len(keys):
            if 'backspace' in keys:
                text.text = text.text[:-1]
            elif 'return' in keys:
                if text.text == 'DONE':
                    theRT = RT.getTime()
                    RTtowrite = RTtowrite + str(theRT) + '|'
                    text.towrite = text.towrite + text.text + '|'
                    continueRoutine = False
                else:
                    theRT = RT.getTime()
                    RTtowrite = RTtowrite + str(theRT) + '|'
                    text.towrite = text.towrite + text.text + '|'
                    event.clearEvents('keyboard')
                    RT = core.Clock()
                    text.text = ''
            else:
                # words typed in all caps
                text.text = text.text + keys[0].upper()
      End Routine:
        # add typed words and RT to the data file
        thisExp.addData('typedWord', text.towrite)
        thisExp.addData('wordRT', RTtowrite)
    TextComponent end_instr1
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = When you have typed in all of the words you can remember, type the word "DONE" and press ENTER to continue the experiment.
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  Routine instructions2
    TextComponent instr2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In the second task, you will be asked to type as many animal names as you can think of into your computer. You will have 3 minutes to type out the animal names, in any order.

        Press SPACEBAR to continue.
    KeyboardComponent instr2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions3
    TextComponent instr3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Your final task will be a recognition memory task in which we show you individual words one at a time. Your task will be to determine if the word presented to you is "old" (a word that you saw in the first task) or "new" (a word you did not see in the first task). You will make your responses using the letter "O" (for "old") and "N" (for "new") keys on your keyboard.

        When you are ready to begin the experiment, press SPACEBAR to continue.
    KeyboardComponent instr3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions1
    TextComponent instr1
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In this experiment, you will perform different types of memory tasks.

        In the first task, you will try to remember a list of 10 words. During the study phase, each word will be presented to you one at a time on your screen. After studying all 10 words, you will be asked to recall those words by typing them into your computer. You will study and recall this list a total of 3 times. The words will be randomly shuffled during each study phase.

        Press SPACEBAR to continue.
    KeyboardComponent instr1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine intro
  Routine studyInfo
  Routine instructions1
  Routine instructions2
  Routine instructions3
  LoopInitiator immediateFR loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine beginList
    LoopInitiator studyList loopType="TrialHandler"
      conditionsFile = studylist.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('studyword', 'BUTTER')]),
        OrderedDict([('studyword', 'ARM')]),
        OrderedDict([('studyword', 'SHORE')]),
        OrderedDict([('studyword', 'LETTER')]),
        OrderedDict([('studyword', 'QUEEN')]),
        OrderedDict([('studyword', 'CABIN')]),
        OrderedDict([('studyword', 'POLE')]),
        OrderedDict([('studyword', 'TICKET')]),
        OrderedDict([('studyword', 'GRASS')]),
        OrderedDict([('studyword', 'ENGINE')])]
      Routine study
    LoopTerminator studyList
    Routine beginTest
    Routine FRtest
  LoopTerminator immediateFR
  Routine beginAnimal
  Routine animalFluency
  Routine beginDelayedFR
  Routine FRtest
  Routine beginRecog
  LoopInitiator testList loopType="TrialHandler"
    conditionsFile = testlist.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('testword', 'BUTTER'), ('target', 1), ('correctresp', 'o')]),
      OrderedDict([('testword', 'ARM'), ('target', 1), ('correctresp', 'o')]),
      OrderedDict([('testword', 'SHORE'), ('target', 1), ('correctresp', 'o')]),
      OrderedDict([('testword', 'LETTER'), ('target', 1), ('correctresp', 'o')]),
      OrderedDict([('testword', 'QUEEN'), ('target', 1), ('correctresp', 'o')]),
      OrderedDict([('testword', 'CABIN'), ('target', 1), ('correctresp', 'o')]),
      OrderedDict([('testword', 'POLE'), ('target', 1), ('correctresp', 'o')]),
      OrderedDict([('testword', 'TICKET'), ('target', 1), ('correctresp', 'o')]),
      OrderedDict([('testword', 'GRASS'), ('target', 1), ('correctresp', 'o')]),
      OrderedDict([('testword', 'ENGINE'), ('target', 1), ('correctresp', 'o')]),
      OrderedDict([('testword', 'CHURCH'), ('target', 0), ('correctresp', 'n')]),
      OrderedDict([('testword', 'COFFEE'), ('target', 0), ('correctresp', 'n')]),
      OrderedDict([('testword', 'DOLLAR'), ('target', 0), ('correctresp', 'n')]),
      OrderedDict([('testword', 'FIVE'), ('target', 0), ('correctresp', 'n')]),
      OrderedDict([('testword', 'HOTEL'), ('target', 0), ('correctresp', 'n')]),
      OrderedDict([('testword', 'MOUNTAIN'), ('target', 0), ('correctresp', 'n')]),
      OrderedDict([('testword', 'SLIPPER'), ('target', 0), ('correctresp', 'n')]),
      OrderedDict([('testword', 'VILLAGE'), ('target', 0), ('correctresp', 'n')]),
      OrderedDict([('testword', 'STRING'), ('target', 0), ('correctresp', 'n')]),
      OrderedDict([('testword', 'TROOP'), ('target', 0), ('correctresp', 'n')])]
    Routine recogTest
  LoopTerminator testList
  Routine expDone
